<?xml version='1.0' encoding='UTF-8'?>
<model cmeta:id="hodgkin_huxley_squid_axon_1952" name="hodgkin_huxley_squid_axon_1952" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
    <units name="millisecond">
        <unit prefix="milli" units="second"/>
    </units>
    <units name="milliS_per_cm2">
        <unit prefix="milli" units="siemens"/>
        <unit exponent="-2.0" prefix="centi" units="metre"/>
    </units>
    <units name="microF_per_cm2">
        <unit prefix="micro" units="farad"/>
        <unit exponent="-2.0" prefix="centi" units="metre"/>
    </units>
    <units name="microA_per_cm2">
        <unit prefix="micro" units="ampere"/>
        <unit exponent="-2.0" prefix="centi" units="metre"/>
    </units>
    <units name="per_millisecond">
        <unit exponent="-1.0" prefix="milli" units="second"/>
    </units>
    <units name="millivolt">
        <unit prefix="milli" units="volt"/>
    </units>
    <component name="membrane">
        <variable cmeta:id="membrane.i_K" name="i_K" public_interface="in" units="microA_per_cm2"/>
        <variable cmeta:id="membrane.i_Stim" name="i_Stim" units="microA_per_cm2"/>
        <variable cmeta:id="membrane.time" name="time" public_interface="in" units="millisecond"/>
        <variable cmeta:id="membrane_V" name="V" public_interface="out" units="millivolt"/>
        <variable cmeta:id="membrane.i_L" name="i_L" public_interface="in" units="microA_per_cm2"/>
        <variable cmeta:id="membrane.i_Na" name="i_Na" public_interface="in" units="microA_per_cm2"/>
        <variable cmeta:id="membrane.E_R" name="E_R" public_interface="out" units="millivolt"/>
        <variable cmeta:id="membrane.Cm" name="Cm" units="microF_per_cm2"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>i_Stim</ci>
                <piecewise>
                    <piece>
                        <cn cellml:units="microA_per_cm2">20</cn>
                        <apply>
                            <and/>
                            <apply>
                                <geq/>
                                <ci>time</ci>
                                <cn cellml:units="millisecond">10</cn>
                            </apply>
                            <apply>
                                <leq/>
                                <ci>time</ci>
                                <cn cellml:units="millisecond">10.5</cn>
                            </apply>
                        </apply>
                    </piece>
                    <otherwise>
                        <cn cellml:units="microA_per_cm2">0</cn>
                    </otherwise>
                </piecewise>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>V</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <apply>
                            <plus/>
                            <apply>
                                <minus/>
                                <ci>i_Stim</ci>
                            </apply>
                            <ci>i_Na</ci>
                            <ci>i_K</ci>
                            <ci>i_L</ci>
                        </apply>
                    </apply>
                    <ci>Cm</ci>
                </apply>
            </apply>
        </math>
    </component>
    <component name="environment">
        <variable cmeta:id="environment_time" name="time" public_interface="out" units="millisecond"/>
    </component>
    <component name="sodium_channel_h_gate">
        <variable cmeta:id="sodium_channel_h_gate.V" name="V" public_interface="in" units="millivolt"/>
        <variable cmeta:id="sodium_channel_h_gate.beta_h" name="beta_h" units="per_millisecond"/>
        <variable cmeta:id="sodium_channel_h_gate.h" name="h" public_interface="out" units="dimensionless"/>
        <variable cmeta:id="sodium_channel_h_gate.alpha_h" name="alpha_h" units="per_millisecond"/>
        <variable cmeta:id="sodium_channel_h_gate.time" name="time" public_interface="in" units="millisecond"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>alpha_h</ci>
                <apply>
                    <times/>
                    <cn cellml:units="per_millisecond">0.07</cn>
                    <apply>
                        <exp/>
                        <apply>
                            <divide/>
                            <apply>
                                <minus/>
                                <apply>
                                    <plus/>
                                    <ci>V</ci>
                                    <cn cellml:units="millivolt">75</cn>
                                </apply>
                            </apply>
                            <cn cellml:units="millivolt">20</cn>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>beta_h</ci>
                <apply>
                    <divide/>
                    <cn cellml:units="per_millisecond">1</cn>
                    <apply>
                        <plus/>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <apply>
                                    <minus/>
                                    <apply>
                                        <plus/>
                                        <ci>V</ci>
                                        <cn cellml:units="millivolt">45</cn>
                                    </apply>
                                </apply>
                                <cn cellml:units="millivolt">10</cn>
                            </apply>
                        </apply>
                        <cn cellml:units="dimensionless">1</cn>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>h</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>alpha_h</ci>
                        <apply>
                            <minus/>
                            <cn cellml:units="dimensionless">1</cn>
                            <ci>h</ci>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <ci>beta_h</ci>
                        <ci>h</ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <component name="potassium_channel_n_gate">
        <variable cmeta:id="potassium_channel_n_gate.beta_n" name="beta_n" units="per_millisecond"/>
        <variable cmeta:id="potassium_channel_n_gate.alpha_n" name="alpha_n" units="per_millisecond"/>
        <variable cmeta:id="potassium_channel_n_gate.n" name="n" public_interface="out" units="dimensionless"/>
        <variable cmeta:id="potassium_channel_n_gate.V" name="V" public_interface="in" units="millivolt"/>
        <variable cmeta:id="potassium_channel_n_gate.time" name="time" public_interface="in" units="millisecond"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>alpha_n</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <apply>
                            <minus/>
                            <cn cellml:units="per_millivolt_millisecond">0.01</cn>
                        </apply>
                        <apply>
                            <plus/>
                            <ci>V</ci>
                            <cn cellml:units="millivolt">65</cn>
                        </apply>
                    </apply>
                    <apply>
                        <minus/>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <apply>
                                    <minus/>
                                    <apply>
                                        <plus/>
                                        <ci>V</ci>
                                        <cn cellml:units="millivolt">65</cn>
                                    </apply>
                                </apply>
                                <cn cellml:units="millivolt">10</cn>
                            </apply>
                        </apply>
                        <cn cellml:units="dimensionless">1</cn>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>beta_n</ci>
                <apply>
                    <times/>
                    <cn cellml:units="per_millisecond">0.125</cn>
                    <apply>
                        <exp/>
                        <apply>
                            <divide/>
                            <apply>
                                <plus/>
                                <ci>V</ci>
                                <cn cellml:units="millivolt">75</cn>
                            </apply>
                            <cn cellml:units="millivolt">80</cn>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>n</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>alpha_n</ci>
                        <apply>
                            <minus/>
                            <cn cellml:units="dimensionless">1</cn>
                            <ci>n</ci>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <ci>beta_n</ci>
                        <ci>n</ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <component name="leakage_current">
        <variable cmeta:id="leakage_current.E_L" name="E_L" units="millivolt"/>
        <variable cmeta:id="leakage_current.g_L" name="g_L" units="milliS_per_cm2"/>
        <variable cmeta:id="leakage_current.time" name="time" public_interface="in" units="millisecond"/>
        <variable cmeta:id="leakage_current_i_L" name="i_L" public_interface="out" units="microA_per_cm2"/>
        <variable cmeta:id="leakage_current.E_R" name="E_R" public_interface="in" units="millivolt"/>
        <variable cmeta:id="leakage_current.V" name="V" public_interface="in" units="millivolt"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>E_L</ci>
                <apply>
                    <plus/>
                    <ci>E_R</ci>
                    <cn cellml:units="millivolt">10.613</cn>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>i_L</ci>
                <apply>
                    <times/>
                    <ci>g_L</ci>
                    <apply>
                        <minus/>
                        <ci>V</ci>
                        <ci>E_L</ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <component name="sodium_channel_m_gate">
        <variable cmeta:id="sodium_channel_m_gate.beta_m" name="beta_m" units="per_millisecond"/>
        <variable cmeta:id="sodium_channel_m_gate.alpha_m" name="alpha_m" units="per_millisecond"/>
        <variable cmeta:id="sodium_channel_m_gate.time" name="time" public_interface="in" units="millisecond"/>
        <variable cmeta:id="sodium_channel_m_gate.V" name="V" public_interface="in" units="millivolt"/>
        <variable cmeta:id="sodium_channel_m_gate.m" name="m" public_interface="out" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>alpha_m</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <apply>
                            <minus/>
                            <cn cellml:units="per_millivolt_millisecond">0.1</cn>
                        </apply>
                        <apply>
                            <plus/>
                            <ci>V</ci>
                            <cn cellml:units="millivolt">50</cn>
                        </apply>
                    </apply>
                    <apply>
                        <minus/>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <apply>
                                    <minus/>
                                    <apply>
                                        <plus/>
                                        <ci>V</ci>
                                        <cn cellml:units="millivolt">50</cn>
                                    </apply>
                                </apply>
                                <cn cellml:units="millivolt">10</cn>
                            </apply>
                        </apply>
                        <cn cellml:units="dimensionless">1</cn>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>beta_m</ci>
                <apply>
                    <times/>
                    <cn cellml:units="per_millisecond">4</cn>
                    <apply>
                        <exp/>
                        <apply>
                            <divide/>
                            <apply>
                                <minus/>
                                <apply>
                                    <plus/>
                                    <ci>V</ci>
                                    <cn cellml:units="millivolt">75</cn>
                                </apply>
                            </apply>
                            <cn cellml:units="millivolt">18</cn>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>m</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>alpha_m</ci>
                        <apply>
                            <minus/>
                            <cn cellml:units="dimensionless">1</cn>
                            <ci>m</ci>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <ci>beta_m</ci>
                        <ci>m</ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <component name="sodium_channel">
        <variable cmeta:id="sodium_channel.m" name="m" private_interface="in" units="dimensionless"/>
        <variable cmeta:id="sodium_channel.E_R" name="E_R" public_interface="in" units="millivolt"/>
        <variable cmeta:id="sodium_channel.time" name="time" private_interface="out" public_interface="in" units="millisecond"/>
        <variable cmeta:id="sodium_channel.g_Na" name="g_Na" units="milliS_per_cm2"/>
        <variable cmeta:id="sodium_channel.E_Na" name="E_Na" units="millivolt"/>
        <variable cmeta:id="sodium_channel.V" name="V" private_interface="out" public_interface="in" units="millivolt"/>
        <variable cmeta:id="sodium_channel.h" name="h" private_interface="in" units="dimensionless"/>
        <variable cmeta:id="sodium_channel_i_Na" name="i_Na" public_interface="out" units="microA_per_cm2"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>E_Na</ci>
                <apply>
                    <plus/>
                    <ci>E_R</ci>
                    <cn cellml:units="millivolt">115</cn>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>i_Na</ci>
                <apply>
                    <times/>
                    <ci>g_Na</ci>
                    <apply>
                        <power/>
                        <ci>m</ci>
                        <cn cellml:units="dimensionless">3</cn>
                    </apply>
                    <ci>h</ci>
                    <apply>
                        <minus/>
                        <ci>V</ci>
                        <ci>E_Na</ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <component name="potassium_channel">
        <variable cmeta:id="potassium_channel.E_K" name="E_K" units="millivolt"/>
        <variable cmeta:id="potassium_channel.g_K" name="g_K" units="milliS_per_cm2"/>
        <variable cmeta:id="potassium_channel.n" name="n" private_interface="in" units="dimensionless"/>
        <variable cmeta:id="potassium_channel.time" name="time" private_interface="out" public_interface="in" units="millisecond"/>
        <variable cmeta:id="potassium_channel.E_R" name="E_R" public_interface="in" units="millivolt"/>
        <variable cmeta:id="potassium_channel.V" name="V" private_interface="out" public_interface="in" units="millivolt"/>
        <variable cmeta:id="potassium_channel_i_K" name="i_K" public_interface="out" units="microA_per_cm2"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>E_K</ci>
                <apply>
                    <minus/>
                    <ci>E_R</ci>
                    <cn cellml:units="millivolt">12</cn>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>i_K</ci>
                <apply>
                    <times/>
                    <ci>g_K</ci>
                    <apply>
                        <power/>
                        <ci>n</ci>
                        <cn cellml:units="dimensionless">4</cn>
                    </apply>
                    <apply>
                        <minus/>
                        <ci>V</ci>
                        <ci>E_K</ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <group>
        <relationship_ref relationship="encapsulation"/>
        <component_ref component="sodium_channel">
            <component_ref component="sodium_channel_m_gate"/>
            <component_ref component="sodium_channel_h_gate"/>
        </component_ref>
        <component_ref component="potassium_channel">
            <component_ref component="potassium_channel_n_gate"/>
        </component_ref>
    </group>
    <group>
        <relationship_ref relationship="containment"/>
        <component_ref component="membrane">
            <component_ref component="sodium_channel">
                <component_ref component="sodium_channel_m_gate"/>
                <component_ref component="sodium_channel_h_gate"/>
            </component_ref>
            <component_ref component="leakage_current"/>
            <component_ref component="potassium_channel">
                <component_ref component="potassium_channel_n_gate"/>
            </component_ref>
        </component_ref>
    </group>
    <connection>
        <map_components component_1="sodium_channel_m_gate" component_2="sodium_channel"/>
        <map_variables variable_1="m" variable_2="m"/>
    </connection>
    <connection>
        <map_components component_1="potassium_channel" component_2="membrane"/>
        <map_variables variable_1="i_K" variable_2="i_K"/>
    </connection>
    <connection>
        <map_components component_1="potassium_channel" component_2="potassium_channel_n_gate"/>
        <map_variables variable_1="V" variable_2="V"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="environment" component_2="sodium_channel"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="leakage_current" component_2="membrane"/>
        <map_variables variable_1="i_L" variable_2="i_L"/>
    </connection>
    <connection>
        <map_components component_1="sodium_channel" component_2="sodium_channel_h_gate"/>
        <map_variables variable_1="V" variable_2="V"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="membrane" component_2="potassium_channel"/>
        <map_variables variable_1="V" variable_2="V"/>
        <map_variables variable_1="E_R" variable_2="E_R"/>
    </connection>
    <connection>
        <map_components component_1="membrane" component_2="sodium_channel"/>
        <map_variables variable_1="V" variable_2="V"/>
        <map_variables variable_1="E_R" variable_2="E_R"/>
    </connection>
    <connection>
        <map_components component_1="sodium_channel" component_2="membrane"/>
        <map_variables variable_1="i_Na" variable_2="i_Na"/>
    </connection>
    <connection>
        <map_components component_1="environment" component_2="membrane"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="sodium_channel" component_2="sodium_channel_m_gate"/>
        <map_variables variable_1="V" variable_2="V"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="potassium_channel_n_gate" component_2="potassium_channel"/>
        <map_variables variable_1="n" variable_2="n"/>
    </connection>
    <connection>
        <map_components component_1="sodium_channel_h_gate" component_2="sodium_channel"/>
        <map_variables variable_1="h" variable_2="h"/>
    </connection>
    <connection>
        <map_components component_1="environment" component_2="leakage_current"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <connection>
        <map_components component_1="membrane" component_2="leakage_current"/>
        <map_variables variable_1="V" variable_2="V"/>
        <map_variables variable_1="E_R" variable_2="E_R"/>
    </connection>
    <connection>
        <map_components component_1="environment" component_2="potassium_channel"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <documentation xmlns="http://cellml.org/tmp-documentation">
        <article xmlns="http://cellml.org/tmp-documentation">
            <section xmlns="http://cellml.org/tmp-documentation" id="sec_status">
                <title xmlns="http://cellml.org/tmp-documentation">Model Status</title>
                <para xmlns="http://cellml.org/tmp-documentation">This version has had a stimulus protocol component added to allow the model to simulate multiple action potentials, has been unit checked and curated and is known to run in COR and PCEnv.</para>
            </section>
            <sect1 xmlns="http://cellml.org/tmp-documentation" id="sec_structure">
                <title xmlns="http://cellml.org/tmp-documentation">Model Structure</title>
                <para xmlns="http://cellml.org/tmp-documentation">In a series of papers published in 1952, A.L. Hodgkin and A.F. Huxley presented the results of a series of experiments in which they investigated the flow of electric current through the surface membrane of the giant nerve fibre of a squid. In the summary paper of the Hodgkin and Huxley model, the authors developed a mathematical description of the behaviour of the membrane based upon these experiments, which accounts for the conduction and excitation of the fibre. The form of this description has been used as the basis for almost all other ionic current models of excitable tissues, including Purkinje fibres and cardiac atrial and ventricular muscle.</para>
                <para xmlns="http://cellml.org/tmp-documentation">The summary paper is cited below:</para>
                <para xmlns="http://cellml.org/tmp-documentation">
          A Quantitative Description of Membrane Current and its Application to Conduction and Excitation in Nerve, A. L. Hodgkin and A. F. Huxley, 1952,
          <emphasis xmlns="http://cellml.org/tmp-documentation">The Journal of Physiology</emphasis>
          , 117, 500-544.
          <ulink xmlns="http://cellml.org/tmp-documentation" url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?db=pubmed&amp;cmd=Retrieve&amp;dopt=AbstractPlus&amp;list_uids=12991237&amp;query_hl=1&amp;itool=pubmed_docsum">PubMed ID: 12991237</ulink>
                </para>
                <informalfigure xmlns="http://cellml.org/tmp-documentation" float="0" id="fig_circuit_diagram">
                    <mediaobject xmlns="http://cellml.org/tmp-documentation">
                        <imageobject xmlns="http://cellml.org/tmp-documentation">
                            <objectinfo xmlns="http://cellml.org/tmp-documentation">
                                <title xmlns="http://cellml.org/tmp-documentation">Electrical circuit describing the current across the cell membrane</title>
                            </objectinfo>
                            <imagedata xmlns="http://cellml.org/tmp-documentation" fileref="hodgkin_1952.png"/>
                        </imageobject>
                    </mediaobject>
                    <caption xmlns="http://cellml.org/tmp-documentation">A schematic cell diagram describing the current flows across the cell membrane that are captured in the Hodgkin Huxley model.</caption>
                </informalfigure>
            </sect1>
        </article>
    </documentation>
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
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        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="http://www.cellml.org/cellml/1.0#hodgkin_huxley_squid_axon_1952">
            <j.0:Pubmed_id xmlns:j.0="http://www.cellml.org/bqs/1.0#" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">12991237</j.0:Pubmed_id>
            <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">The Classic Hodgkin-Huxley 1952 Model of A Squid Axon.</dc:title>
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            <j.0:reference xmlns:j.0="http://www.cellml.org/bqs/1.0#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="rdf:#2f069a61-06ba-4782-a877-f31e770cdf0d">
                    <j.0:Pubmed_id xmlns:j.0="http://www.cellml.org/bqs/1.0#" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">12991237</j.0:Pubmed_id>
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                </rdf:Description>
            </j.0:reference>
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        </rdf:Description>
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    </rdf:RDF>
</model>
